PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = global_local
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Routines
  Routine screen_scale
    CodeComponent code_JS
      Code Type = JS
      Begin JS Experiment:
        thisExp=psychoJS.experiment;
        win=psychoJS.window;
        event=psychoJS.eventManager;
        Array.prototype.append = [].push;
        shuffle = util.shuffle;
        webbrowser=window;

        random=Math.random;
        randint=function(min, maxplusone) {
            return Math.floor(Math.random() * (maxplusone - min) ) + min;
        }

        round = function(num, n=0) {
            return +(Math.round(num + ("e+" + n))  + ("e-" + n));
        }

        psychoJS.downloadResources([{name: ("Stimuli/bankcard.png"), path:("Stimuli/bankcard.png")},
        {name: ("Stimuli/greenCheck.png"), path:("Stimuli/greenCheck.png")},
        {name: ("Stimuli/redWrong.png"), path:("Stimuli/redWrong.png")},
        {name: ("Stimuli/HofH2.bmp"), path:("Stimuli/HofH2.bmp")},
        {name: ("Stimuli/HofS2.bmp"), path:("Stimuli/HofS2.bmp")},
        {name: ("Stimuli/SofH2.bmp"), path:("Stimuli/SofH2.bmp")},
        {name: ("Stimuli/SofS2.bmp"), path:("Stimuli/SofS2.bmp")},
        {name: ("Designs/design1_run1.png"), path:("Designs/design1_run1.png")},
        {name: ("Designs/design2_run1.png"), path:("Designs/design2_run1.png")},
        {name: ("Designs/design3_run1.png"), path:("Designs/design3_run1.png")},
        {name: ("Designs/design4_run1.png"), path:("Designs/design4_run1.png")},
        {name: ("Designs/design1_run2.png"), path:("Designs/design1_run2.png")},
        {name: ("Designs/design2_run2.png"), path:("Designs/design2_run2.png")},
        {name: ("Designs/design3_run2.png"), path:("Designs/design3_run2.png")},
        {name: ("Designs/design4_run2.png"), path:("Designs/design4_run2.png")},
        {name: ("Designs/design1_run1.csv"), path:("Designs/design1_run1.csv")},
        {name: ("Designs/design2_run1.csv"), path:("Designs/design2_run1.csv")},
        {name: ("Designs/design3_run1.csv"), path:("Designs/design3_run1.csv")},
        {name: ("Designs/design4_run1.csv"), path:("Designs/design4_run1.csv")},
        {name: ("Designs/design1_run2.csv"), path:("Designs/design1_run2.csv")},
        {name: ("Designs/design2_run2.csv"), path:("Designs/design2_run2.csv")},
        {name: ("Designs/design3_run2.csv"), path:("Designs/design3_run2.csv")},
        {name: ("Designs/design4_run2.csv"), path:("Designs/design4_run2.csv")}]);

        expInfo['OS'] = window.navigator.platform;
        expInfo['xResolution'] = screen.width;
        expInfo['yResolution'] = screen.height;
    CodeComponent code_1
      Code Type = Auto->JS
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      Begin Experiment:
        oldt=0
        x_size=8.560
        y_size=5.398
        screen_height=0

        if win.units=='norm':
            x_scale=.05
            y_scale=.1
            dbase = .0001
            unittext=' norm units'
            vsize=2
        elif win.units=='pix':
            x_scale=60
            y_scale=40
            dbase = .1
            unittext=' pixels'
            vsize=win.size[1]
        else:
            x_scale=.05
            y_scale=.05
            dbase = .0001
            unittext=' height units'
            vsize=1

        # h = tan(degrees = 2) x (distance = 49.53)
        height = 3.459
        width = 3.459
      Each Frame:
        keys=event.getKeys()

        if len(keys):
            if t-oldt<.5:
                dscale=5*dbase
                oldt=t
            else:
                dscale=dbase
                oldt=t
            if 'space' in keys:
                continueRoutine=False
            elif 'up' in keys:
                y_scale=round((y_scale+dscale)*10000)/10000
            elif 'down' in keys:
                y_scale=round((y_scale-dscale)*10000)/10000
            elif 'left' in keys:
                x_scale=round((x_scale-dscale)*10000)/10000
            elif 'right' in keys:
                x_scale=round((x_scale+dscale)*10000)/10000
            screen_height=round(vsize*10/y_scale)/10
            ccimage.size=[x_size*x_scale, y_size*y_scale]
      End Routine:
        thisExp.addData('X Scale',x_scale)
        thisExp.addData('Y Scale',y_scale)
    TextComponent text_top
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Resize this image to match the size of a credit card with arrow keys
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    TextComponent text_bottom
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = Press Space when you’re finished
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    ImageComponent ccimage
      image = Stimuli/bank-1300155_640.png
      size = $(x_size*x_scale, y_size*y_scale)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      texture resolution = 512
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Flow
  Routine screen_scale
